CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1.jpg")
    Name to assign these images:Fluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4.jpg")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Brightfield
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceEdges:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EdgedImage
    Name the primary objects to be identified:SpheroidMask
    Typical diameter of objects, in pixel units (Min,Max):800,2000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:Fluorescence
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:SpheroidMask
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:6
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    Image:None
    Objects to display:Do not use
    Number of bins:3
    Measurement:Mean Fraction
    Color map:Blues
    Save display as image?:Yes
    Output image name:Heatmap

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:EF5 Intensity from core_NoAmiloride
    Overwrite existing files without warning?:No
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