CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c1.jpg")
    Name to assign these images:Fluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c4.jpg")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:Fluorescence
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.09,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Threshold
    Name the primary objects to be identified:HighSignalRegions
    Typical diameter of objects, in pixel units (Min,Max):10,1700
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.09,1.0
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    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:7|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
    Select the input objects:HighSignalRegions
    Name the new objects:Full_HighSignal
    Operation:Merge
    Maximum distance within which to merge objects:10000
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RescaleIntensity:[module_num:8|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
    Select the input image:Brightfield
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceEdges:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EdgedImage
    Name the primary objects to be identified:WholeSphere
    Typical diameter of objects, in pixel units (Min,Max):300,1600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1.0
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    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:11|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
    Select the input objects:WholeSphere
    Name the new objects:WholeSphereMerged
    Operation:Merge
    Maximum distance within which to merge objects:1000000000
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Full_HighSignal
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:WholeSphereMerged
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:Fluorescence
    Select objects to measure:WholeSphereMerged

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Fluorescence
    Select objects to measure:Full_HighSignal

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:High Signal Regions
    Overwrite existing files without warning?:No
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